PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = change-localization
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome.
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  Routine practice
  Routine trial
    MouseComponent mouse
      clickable = stim1
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    PolygonComponent stim1
      fillColor [set every repeat] = $color1
      lineColor [set every repeat] = $color1
      pos [set every repeat] = $pos1
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('pos1', [0, 0]), ('color1', 'black'), ('change', None)]),
      OrderedDict([('pos1', [0, 0]), ('color1', 'white'), ('change', 'stim1')])]
    Routine trial
  LoopTerminator trials
